PsychoPy2experiment version="2025.1.1"
Settings
  Data filename = u'data' + os.sep + '%s_%s' % (expInfo['participant'], expInfo['date'])
  Experiment info = {'session': '1', 'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['html/resources/imgs/white_0.75_0.75_1.0_0.0.png', 'html/resources/imgs/white_0.75_0.75_0.0_1.0.png', 'html/resources/imgs/white_0.75_0.67_0.0_1.0.png', 'html/resources/imgs/white_0.75_0.67_1.0_1.0.png', 'html/resources/imgs/white_0.75_0.67_1.0_0.0.png', 'html/resources/imgs/white_0.67_0.75_1.0_0.0.png', 'html/resources/imgs/white_0.67_0.75_0.0_1.0.png', 'html/resources/imgs/white_0.67_0.75_0.0_0.0.png', 'html/resources/imgs/white_0.67_0.67_1.0_0.0.png', 'html/resources/imgs/white_0.75_0.58_1.0_1.0.png', 'html/resources/imgs/white_0.75_0.58_0.0_1.0.png', 'html/resources/imgs/white_0.58_0.75_1.0_0.0.png', 'html/resources/imgs/white_0.67_0.58_0.0_1.0.png', 'html/resources/imgs/white_0.67_0.58_1.0_1.0.png', 'html/resources/imgs/white_0.75_0.58_1.0_0.0.png', 'html/resources/imgs/white_0.58_0.67_1.0_0.0.png', 'html/resources/imgs/white_0.58_0.75_0.0_1.0.png', 'html/resources/imgs/white_0.75_0.58_0.0_0.0.png', 'html/resources/imgs/white_0.67_0.58_1.0_0.0.png', 'html/resources/imgs/white_0.58_0.67_0.0_1.0.png', 'html/resources/imgs/white_0.58_0.58_0.0_1.0.png', 'html/resources/imgs/white_0.58_0.58_1.0_0.0.png', 'html/resources/imgs/white_0.67_0.58_0.0_0.0.png', 'html/resources/imgs/white_0.75_0.5_0.0_1.0.png', 'html/resources/imgs/white_0.5_0.75_1.0_0.0.png', 'html/resources/imgs/white_0.5_0.75_1.0_1.0.png', 'html/resources/imgs/white_0.67_0.5_0.0_1.0.png', 'html/resources/imgs/white_0.5_0.67_1.0_1.0.png', 'html/resources/imgs/white_0.5_0.67_1.0_0.0.png', 'html/resources/imgs/white_0.58_0.5_0.0_1.0.png', 'html/resources/imgs/white_0.5_0.58_1.0_1.0.png', 'html/resources/imgs/white_0.5_0.75_0.0_1.0.png', 'html/resources/imgs/white_0.5_0.58_1.0_0.0.png', 'html/resources/imgs/white_0.67_0.5_1.0_0.0.png', 'html/resources/imgs/white_0.5_0.75_0.0_0.0.png', 'html/resources/imgs/white_0.5_0.67_0.0_1.0.png', 'html/resources/imgs/white_0.67_0.5_0.0_0.0.png', 'html/resources/imgs/white_0.5_0.58_0.0_1.0.png', 'html/resources/imgs/white_0.58_0.5_1.0_0.0.png', 'html/resources/imgs/white_0.5_0.5_1.0_0.0.png', 'html/resources/imgs/white_0.58_0.5_0.0_0.0.png', 'html/resources/imgs/white_0.5_0.5_0.0_1.0.png', 'html/resources/imgs/white_0.75_0.42_1.0_1.0.png', 'html/resources/imgs/white_0.75_0.42_0.0_1.0.png', 'html/resources/imgs/white_0.67_0.42_1.0_1.0.png', 'html/resources/imgs/white_0.42_0.75_1.0_0.0.png', 'html/resources/imgs/white_0.42_0.67_1.0_0.0.png', 'html/resources/imgs/white_0.42_0.58_1.0_0.0.png', 'html/resources/imgs/white_0.42_0.58_1.0_1.0.png', 'html/resources/imgs/white_0.5_0.42_0.0_1.0.png', 'html/resources/imgs/white_0.5_0.42_1.0_1.0.png', 'html/resources/imgs/white_0.42_0.5_1.0_0.0.png', 'html/resources/imgs/white_0.75_0.42_1.0_0.0.png', 'html/resources/imgs/white_0.75_0.42_0.0_0.0.png', 'html/resources/imgs/white_0.67_0.42_1.0_0.0.png', 'html/resources/imgs/white_0.42_0.67_0.0_1.0.png', 'html/resources/imgs/white_0.67_0.42_0.0_0.0.png', 'html/resources/imgs/white_0.58_0.42_1.0_0.0.png', 'html/resources/imgs/white_0.42_0.58_0.0_1.0.png', 'html/resources/imgs/white_0.42_0.58_0.0_0.0.png', 'html/resources/imgs/white_0.42_0.5_0.0_1.0.png', 'html/resources/imgs/white_0.5_0.42_1.0_0.0.png', 'html/resources/imgs/white_0.42_0.5_0.0_0.0.png', 'html/resources/imgs/white_0.42_0.42_0.0_1.0.png', 'html/resources/imgs/white_0.75_0.33_0.0_1.0.png', 'html/resources/imgs/white_0.33_0.75_1.0_1.0.png', 'html/resources/imgs/white_0.33_0.75_1.0_0.0.png', 'html/resources/imgs/white_0.67_0.33_0.0_1.0.png', 'html/resources/imgs/white_0.33_0.67_1.0_0.0.png', 'html/resources/imgs/white_0.33_0.67_1.0_1.0.png', 'html/resources/imgs/white_0.58_0.33_0.0_1.0.png', 'html/resources/imgs/white_0.58_0.33_1.0_1.0.png', 'html/resources/imgs/white_0.33_0.58_1.0_0.0.png', 'html/resources/imgs/white_0.5_0.33_0.0_1.0.png', 'html/resources/imgs/white_0.33_0.5_1.0_1.0.png', 'html/resources/imgs/white_0.33_0.5_1.0_0.0.png', 'html/resources/imgs/white_0.33_0.42_1.0_1.0.png', 'html/resources/imgs/white_0.42_0.33_0.0_1.0.png', 'html/resources/imgs/white_0.33_0.42_1.0_0.0.png', 'html/resources/imgs/white_0.75_0.33_0.0_0.0.png', 'html/resources/imgs/white_0.33_0.75_0.0_1.0.png', 'html/resources/imgs/white_0.67_0.33_1.0_0.0.png', 'html/resources/imgs/white_0.33_0.67_0.0_1.0.png', 'html/resources/imgs/white_0.67_0.33_0.0_0.0.png', 'html/resources/imgs/white_0.33_0.58_0.0_1.0.png', 'html/resources/imgs/white_0.5_0.33_1.0_0.0.png', 'html/resources/imgs/white_0.33_0.58_0.0_0.0.png', 'html/resources/imgs/white_0.5_0.33_0.0_0.0.png', 'html/resources/imgs/white_0.33_0.5_0.0_1.0.png', 'html/resources/imgs/white_0.42_0.33_1.0_0.0.png', 'html/resources/imgs/white_0.42_0.33_0.0_0.0.png', 'html/resources/imgs/white_0.33_0.33_0.0_1.0.png', 'html/resources/imgs/white_0.25_0.75_1.0_1.0.png', 'html/resources/imgs/white_0.75_0.25_0.0_1.0.png', 'html/resources/imgs/white_0.25_0.75_1.0_0.0.png', 'html/resources/imgs/white_0.67_0.25_1.0_1.0.png', 'html/resources/imgs/white_0.67_0.25_0.0_1.0.png', 'html/resources/imgs/white_0.25_0.67_1.0_0.0.png', 'html/resources/imgs/white_0.58_0.25_1.0_1.0.png', 'html/resources/imgs/white_0.58_0.25_0.0_1.0.png', 'html/resources/imgs/white_0.25_0.58_1.0_0.0.png', 'html/resources/imgs/white_0.5_0.25_0.0_1.0.png', 'html/resources/imgs/white_0.25_0.5_1.0_1.0.png', 'html/resources/imgs/white_0.25_0.5_1.0_0.0.png', 'html/resources/imgs/white_0.42_0.25_1.0_1.0.png', 'html/resources/imgs/white_0.42_0.25_0.0_1.0.png', 'html/resources/imgs/white_0.25_0.42_1.0_0.0.png', 'html/resources/imgs/white_0.25_0.33_1.0_1.0.png', 'html/resources/imgs/white_0.33_0.25_0.0_1.0.png', 'html/resources/imgs/white_0.25_0.33_1.0_0.0.png', 'html/resources/imgs/white_0.25_0.75_0.0_1.0.png', 'html/resources/imgs/white_0.75_0.25_1.0_0.0.png', 'html/resources/imgs/white_0.67_0.25_1.0_0.0.png', 'html/resources/imgs/white_0.25_0.75_0.0_0.0.png', 'html/resources/imgs/white_0.25_0.67_0.0_1.0.png', 'html/resources/imgs/white_0.67_0.25_0.0_0.0.png', 'html/resources/imgs/white_0.25_0.58_0.0_1.0.png', 'html/resources/imgs/white_0.58_0.25_0.0_0.0.png', 'html/resources/imgs/white_0.5_0.25_1.0_0.0.png', 'html/resources/imgs/white_0.5_0.25_0.0_0.0.png', 'html/resources/imgs/white_0.25_0.5_0.0_1.0.png', 'html/resources/imgs/white_0.42_0.25_1.0_0.0.png', 'html/resources/imgs/white_0.42_0.25_0.0_0.0.png', 'html/resources/imgs/white_0.25_0.42_0.0_1.0.png', 'html/resources/imgs/white_0.25_0.33_0.0_1.0.png', 'html/resources/imgs/white_0.33_0.25_1.0_0.0.png', 'html/resources/imgs/white_0.33_0.25_0.0_0.0.png', 'html/resources/imgs/white_0.25_0.25_0.0_1.0.png', 'html/resources/imgs/white_0.25_0.25_1.0_0.0.png']
  Save excel file = True
  Screen = 1
  Units = height
  Window size (pixels) = [2560, 1440]
  color = $[0.0000, 0.0000, 0.0000]
  expName = mlcm_experiment_whites_illusion
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine trial
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    KeyboardComponent resp
      allowedKeys = "left","right"
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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    ImageComponent image
      image [set every repeat] = $im
      size = [0.65, 0.5]
      startVal [time (s)] = 0.5
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  Routine instruct
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    KeyboardComponent ready
      correctAns = thisTrial.corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = nothing
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    TextboxComponent instrText
      bold = False
      editable = False
      letterHeight = 0.05
      size = (0.9, 0.9)
      startVal [time (s)] = 0.0
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      text:
        MLCM and White's illusion

        Choose which target looks BRIGHTER.
        (target positions are indicated with an asterisk on the bottom)

        Press the LEFT or RIGHT arrow

        Press any key to continue
        Press Esc to quit
  Routine thanks
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    TextboxComponent thanksText
      bold = False
      editable = False
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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      text:
        This is the end of the experiment

        Thanks!
Flow
  Routine instruct
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = $f"block_{expInfo['session']}.csv"
    endPoints = [1, 2]
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('trial', np.int64(0)), ('lum1', np.float64(0.5)), ('lum2', np.float64(0.37)), ('c1', np.float64(1.0)), ('c2', np.float64(1.0)), ('im', 'imgs/white_0.5_0.37_1.0_1.0.png')]),
      OrderedDict([('trial', np.int64(1)), ('lum1', np.float64(0.37)), ('lum2', np.float64(0.23)), ('c1', np.float64(0.0)), ('c2', np.float64(0.0)), ('im', 'imgs/white_0.37_0.23_0.0_0.0.png')]),
      OrderedDict([('trial', np.int64(2)), ('lum1', np.float64(0.9)), ('lum2', np.float64(0.63)), ('c1', np.float64(0.0)), ('c2', np.float64(1.0)), ('im', 'imgs/white_0.9_0.63_0.0_1.0.png')]),
      OrderedDict([('trial', np.int64(3)), ('lum1', np.float64(0.5)), ('lum2', np.float64(0.9)), ('c1', np.float64(0.0)), ('c2', np.float64(1.0)), ('im', 'imgs/white_0.5_0.9_0.0_1.0.png')]),
      OrderedDict([('trial', np.int64(4)), ('lum1', np.float64(0.1)), ('lum2', np.float64(0.63)), ('c1', np.float64(0.0)), ('c2', np.float64(0.0)), ('im', 'imgs/white_0.1_0.63_0.0_0.0.png')]),
      OrderedDict([('trial', np.int64(5)), ('lum1', np.float64(0.37)), ('lum2', np.float64(0.77)), ('c1', np.float64(0.0)), ('c2', np.float64(1.0)), ('im', 'imgs/white_0.37_0.77_0.0_1.0.png')]),
      OrderedDict([('trial', np.int64(6)), ('lum1', np.float64(0.1)), ('lum2', np.float64(0.9)), ('c1', np.float64(0.0)), ('c2', np.float64(0.0)), ('im', 'imgs/white_0.1_0.9_0.0_0.0.png')]),
      OrderedDict([('trial', np.int64(7)), ('lum1', np.float64(0.63)), ('lum2', np.float64(0.77)), ('c1', np.float64(1.0)), ('c2', np.float64(0.0)), ('im', 'imgs/white_0.63_0.77_1.0_0.0.png')])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
    Routine trial
  LoopTerminator trials
  Routine thanks
