PsychoPy2experiment version="2024.2.5"
Settings
  Data filename = u'data' + os.sep + '%s_%s' % (expInfo['participant'], expInfo['date'])
  Experiment info = {'session': '1', 'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Screen = 1
  Units = height
  Window size (pixels) = [2560, 1440]
  color = 0.5, 0.5, 0.5
  expName = mlds_experiment_numerosity_triads
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine trial
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    KeyboardComponent resp
      allowedKeys = "left","right"
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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    ImageComponent image1
      image [set every repeat] = $i1
      pos = (0.25, -0.125)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.5
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    ImageComponent image2
      image [set every repeat] = $i2
      pos = (0.0, 0.25)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.5
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    ImageComponent image3
      image [set every repeat] = $i3
      pos = (-0.25, -0.125)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.5
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  Routine instruct
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    KeyboardComponent ready
      correctAns = thisTrial.corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = nothing
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    TextboxComponent instrText
      bold = False
      editable = False
      letterHeight = 0.05
      size = (0.9, 0.9)
      startVal [time (s)] = 0.0
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      text:
        Perceived numerosity

        Choose which pair of stimuli look
        more different in their numerosity

        Press the Left arrow for the left-middle pair
        Press the Right Down to chose the right-middle pair

        Press any key to continue
        Press Esc to quit
  Routine thanks
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    TextboxComponent thanksText
      bold = False
      editable = False
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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      text:
        This is the end of the experiment.

        Thanks!
Flow
  Routine instruct
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = $f"design/block_{expInfo['session']}.csv"
    endPoints = [1, 2]
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('trial', 0), ('s1', 30), ('s2', 15), ('s3', 10), ('i1', 'imgs/s_30_r_0.png'), ('i2', 'imgs/s_15_r_0.png'), ('i3', 'imgs/s_10_r_0.png')]),
      OrderedDict([('trial', 1), ('s1', 5), ('s2', 10), ('s3', 50), ('i1', 'imgs/s_5_r_0.png'), ('i2', 'imgs/s_10_r_0.png'), ('i3', 'imgs/s_50_r_0.png')]),
      OrderedDict([('trial', 2), ('s1', 60), ('s2', 50), ('s3', 15), ('i1', 'imgs/s_60_r_0.png'), ('i2', 'imgs/s_50_r_0.png'), ('i3', 'imgs/s_15_r_0.png')]),
      OrderedDict([('trial', 3), ('s1', 40), ('s2', 15), ('s3', 5), ('i1', 'imgs/s_40_r_0.png'), ('i2', 'imgs/s_15_r_0.png'), ('i3', 'imgs/s_5_r_0.png')]),
      OrderedDict([('trial', 4), ('s1', 50), ('s2', 30), ('s3', 20), ('i1', 'imgs/s_50_r_0.png'), ('i2', 'imgs/s_30_r_0.png'), ('i3', 'imgs/s_20_r_0.png')]),
      OrderedDict([('trial', 5), ('s1', 25), ('s2', 40), ('s3', 50), ('i1', 'imgs/s_25_r_0.png'), ('i2', 'imgs/s_40_r_0.png'), ('i3', 'imgs/s_50_r_0.png')]),
      OrderedDict([('trial', 6), ('s1', 5), ('s2', 10), ('s3', 20), ('i1', 'imgs/s_5_r_0.png'), ('i2', 'imgs/s_10_r_0.png'), ('i3', 'imgs/s_20_r_0.png')]),
      OrderedDict([('trial', 7), ('s1', 25), ('s2', 40), ('s3', 60), ('i1', 'imgs/s_25_r_0.png'), ('i2', 'imgs/s_40_r_0.png'), ('i3', 'imgs/s_60_r_0.png')]),
      OrderedDict([('trial', 8), ('s1', 50), ('s2', 40), ('s3', 15), ('i1', 'imgs/s_50_r_0.png'), ('i2', 'imgs/s_40_r_0.png'), ('i3', 'imgs/s_15_r_0.png')]),
      OrderedDict([('trial', 9), ('s1', 25), ('s2', 30), ('s3', 40), ('i1', 'imgs/s_25_r_0.png'), ('i2', 'imgs/s_30_r_0.png'), ('i3', 'imgs/s_40_r_0.png')])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
    Routine trial
  LoopTerminator trials
  Routine thanks
